PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = LAC-paradigma
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Routines
  Routine trial
  Routine welcome
  Routine baseline
  Routine beginning
  Routine respiration_trigger
  Routine stimuli
  Routine intensity
  Routine pleasantness
  Routine familarity
  Routine arousel
  Routine interstimulus
  Routine end
Flow
  Routine welcome
  Routine baseline
  Routine beginning
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('odor', 'coffee'), ('channel', 1)]),
      OrderedDict([('odor', 'lavender'), ('channel', 2)]),
      OrderedDict([('odor', 'empty'), ('channel', 0)])]
    Routine respiration_trigger
    Routine stimuli
    Routine intensity
    Routine pleasantness
    Routine familarity
    Routine arousel
    Routine interstimulus
  LoopTerminator trials
  Routine end
